PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [960, 540]
  expName = odd_one_out_experiment
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcomeText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome, in this task you will be presented with three chess scenario's, side-by-side.

        It is your task to select the odd-one-out. In other words, there is one scenario the most different when comparing to the other two scenario's.
        To select the odd-one-out you can use your mouse. Click on the scenario you think is the most distinct.

        We will start with a few practice rounds.

        Press <space> to continue...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
        # Set number of trials you want to show for practice/main parts of experiment
        nPract = 10
        nMain = 100

        nTotal = nPract + nMain
        # Load all possible conditions from triplets.csv
        df = pd.read_csv('triplets.csv')
        sampled = df.sample(nTotal)
        # Sample practice trials and main trials
        samplePract = sampled[:nPract]
        sampleMain = sampled[nPract:nTotal]
        # Store these trials in separate files that are to be used later on
        samplePract.to_csv('practice_triplets.csv', index=False)
        sampleMain.to_csv('main_triplets.csv', index=False)
  Routine practice
    ImageComponent stim1_pract
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim1
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent stim2_pract
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim2
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent stim3_pract
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim3
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_pract
      clickable = stim1_pract, stim2_pract, stim3_pract
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    TextComponent question_text
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which is the odd-one-out?
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  Routine experiment
    ImageComponent stim1_main
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim1
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent stim2_main
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim2
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent stim3_main
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim3
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_main
      clickable = stim1_main, stim2_main, stim3_main
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    TextComponent question_text_2
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which is the odd-one-out?
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  Routine exit
  Routine pause
    TextComponent pauseText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We have finished practicing.

        Press <space> to continue...
    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = practice_triplets.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Stim1', 'C2_Images_Replacement4.png'), ('Stim2', 'C3_Images_KazicVukovic(Reversed).png'), ('Stim3', 'NC3_Images_Replacement3(Nomate).png')]),
      OrderedDict([('Stim1', 'C3_Images_Replacement3.png'), ('Stim2', 'C4_Images_IvanchukSavchenko(Reversed).png'), ('Stim3', 'C2_Images_Replacement4.png')]),
      OrderedDict([('Stim1', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim2', 'NC3_Images_StudybyErcoleDelRio(Nomate)(Reversed).png'), ('Stim3', 'C2_Images_KrauseMeinhardt.png')]),
      OrderedDict([('Stim1', 'NC3_Images_TylorWinter(Nomate).png'), ('Stim2', 'C1_Images_WinterFriede(Reversed).png'), ('Stim3', 'C3_Images_PodzerovKuntzevic(Reversed).png')]),
      OrderedDict([('Stim1', 'C2_Images_KrauseMeinhardt.png'), ('Stim2', 'C4_Images_BrankaWittwer(Reversed).png'), ('Stim3', 'NC3_Images_KazicVukovic(Nomate)(Reversed).png')]),
      OrderedDict([('Stim1', 'NC3_Images_Replacement3(Nomate).png'), ('Stim2', 'C4_Images_BrankaWittwer(Reversed).png'), ('Stim3', 'C3_Images_Replacement3.png')]),
      OrderedDict([('Stim1', 'C3_Images_MalininAndreev(Reversed).png'), ('Stim2', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim3', 'NC5_Images_EasyPosition6(Nomate).png')]),
      OrderedDict([('Stim1', 'NC3_Images_KazicVukovic(Nomate)(Reversed).png'), ('Stim2', 'NC2_Images_KrauseMeinhardt(Nomate).png'), ('Stim3', 'C5_Images_EasyPosition2.png')])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
    Routine practice
  LoopTerminator practiceTrials
  Routine pause
  LoopInitiator mainTrials loopType="TrialHandler"
    conditionsFile = main_triplets.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Stim1', 'C2_Images_KekhayovPetrov(Reversed).png'), ('Stim2', 'NC1_Images_WinterFriede(Nomate)(Reversed).png'), ('Stim3', 'C5_Images_EasyPosition6.png')]),
      OrderedDict([('Stim1', 'C3_Images_PodzerovKuntzevic(Reversed).png'), ('Stim2', 'NC4_Images_StrekalovskyShaposhlikov(Nomate).png'), ('Stim3', 'C3_Images_StudybyErcoledelRio(Reversed).png')]),
      OrderedDict([('Stim1', 'C3_Images_Replacement5.png'), ('Stim2', 'C5_Images_EasyPosition2.png'), ('Stim3', 'C5_Images_EasyPosition5(Reversed).png')]),
      OrderedDict([('Stim1', 'C5_Images_EasyPosition6.png'), ('Stim2', 'NC3_Images_MalininAndreev(Nomate)(Reversed).png'), ('Stim3', 'NC4_Images_IvanchukSavchenko(Nomate)(Reversed).png')]),
      OrderedDict([('Stim1', 'NC3_Images_TylorWinter(Nomate).png'), ('Stim2', 'NC4_Images_StrekalovskyShaposhlikov(Nomate).png'), ('Stim3', 'C2_Images_KekhayovPetrov(Reversed).png')]),
      OrderedDict([('Stim1', 'NC1_Images_WinterFriede(Nomate)(Reversed).png'), ('Stim2', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim3', 'NC1_Images_Frombeautiful(Nomate).png')]),
      OrderedDict([('Stim1', 'C5_Images_EasyPosition6.png'), ('Stim2', 'C4_Images_BrankaWittwer(Reversed).png'), ('Stim3', 'C2_Images_Replacement4.png')]),
      OrderedDict([('Stim1', 'NC3_Images_MalininAndreev(Nomate)(Reversed).png'), ('Stim2', 'C3_Images_Replacement3.png'), ('Stim3', 'NC1_Images_SteinitzNN(Nomate).png')])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
    Routine experiment
  LoopTerminator mainTrials
  Routine exit
